<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>COM Port</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>Teensy 4.1</ard:Name>
          <ard:PortName>COM11</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>1</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Rec Time</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT5M</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Recording Duration</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Sync Recording</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>32</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>32</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Capacitive Sensor</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalInput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>33</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Response</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Trial Loop</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalInput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>40</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Throttle">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Mouse Waiting?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>false</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Cue</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.25S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>Teensy 4.1</ard:PortName>
                <ard:Pin>41</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Reward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.25S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>Teensy 4.1</ard:PortName>
                <ard:Pin>32</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ITI">
          <p1:MinDelay>7</p1:MinDelay>
          <p1:MaxDelay>12</p1:MaxDelay>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>1</vid:Index>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Recording Duration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>WebCam.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Rotary Encoder</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>0</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.0000001S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Rotary Encoder</Name>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:IndexSelector />
        <viz:ValueSelector />
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity>10000</viz:Capacity>
        <viz:Min>0</viz:Min>
        <viz:Max>1200</viz:Max>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Frame Counter</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>0</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.0000001S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Frame Counter</Name>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:IndexSelector />
        <viz:ValueSelector />
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity>10000</viz:Capacity>
        <viz:Min>0</viz:Min>
        <viz:Max>1200</viz:Max>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Capacitive Sensor</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>0</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.0000001S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Capacitive Sensor</Name>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:IndexSelector />
        <viz:ValueSelector />
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity>10000</viz:Capacity>
        <viz:Min>0</viz:Min>
        <viz:Max>1200</viz:Max>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Vibrissae Piezo</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>0</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.0000001S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Vibrissae Piezo</Name>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:IndexSelector />
        <viz:ValueSelector />
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity>10000</viz:Capacity>
        <viz:Min>0</viz:Min>
        <viz:Max>1200</viz:Max>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Reward Solenoid</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>0</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.0000001S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Reward Solenoid</Name>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:IndexSelector />
        <viz:ValueSelector />
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity>10000</viz:Capacity>
        <viz:Min>0</viz:Min>
        <viz:Max>1200</viz:Max>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Stream Channels</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Rotary Encoder</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frame Counter</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Capacitive Sensor</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Vibrissae Piezo</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Reward Solenoid</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Recording Duration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Data.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="26" Label="Source1" />
      <Edge From="25" To="26" Label="Source2" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="53" To="54" Label="Source1" />
      <Edge From="54" To="59" Label="Source1" />
      <Edge From="55" To="59" Label="Source2" />
      <Edge From="56" To="59" Label="Source3" />
      <Edge From="57" To="59" Label="Source4" />
      <Edge From="58" To="59" Label="Source5" />
      <Edge From="59" To="61" Label="Source1" />
      <Edge From="60" To="61" Label="Source2" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="62" To="63" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>