<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>COM Port</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>Teensy 4.1</ard:Name>
          <ard:PortName>COM18</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>1</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Reset Piezo</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>35</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Sync Recording</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>32</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>32</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Trial Loop</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:InterTrialTimer">
          <p1:DueTime />
          <p1:Period />
          <p1:MinDueTime />
          <p1:MaxDueTime />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:Pin>35</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:Pin>35</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Rotary Encoder</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>14</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:IndexSelector />
        <viz:ValueSelector />
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity xsi:nil="true" />
        <viz:Min xsi:nil="true" />
        <viz:Max xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.01S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:GenerateFileName_Wheel">
          <p1:Suffix>_WheelData</p1:Suffix>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>2025_02_13_10_37_53_WheelData.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0.01S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Frame Period</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalInput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>24</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SampleDigitalChannel" />
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:SymbolType>Default</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity>1000</viz:Capacity>
        <viz:Min>-0.5</viz:Min>
        <viz:Max>1.5</viz:Max>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:GenerateFileName_Frame">
          <p1:Suffix>_FrameData</p1:Suffix>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>2025_02_13_10_37_53_FrameData.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0.01S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Piezo</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalInput">
          <ard:PortName>Teensy 4.1</ard:PortName>
          <ard:Pin>40</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SampleDigitalChannel" />
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:SymbolType>Default</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity>1000</viz:Capacity>
        <viz:Min>-0.5</viz:Min>
        <viz:Max>1.5</viz:Max>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:GenerateFileName_Piezo">
          <p1:Suffix>_PiezoData</p1:Suffix>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>2025_02_13_10_37_53_PiezoData.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="26" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source2" />
      <Edge From="27" To="30" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="30" To="32" Label="Source1" />
      <Edge From="32" To="35" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source2" />
      <Edge From="36" To="39" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source2" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="39" To="41" Label="Source1" />
      <Edge From="41" To="44" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>